PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = BasicTrial
  Units = deg
  Screen = 1
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Routines
  Routine BlankWait
    ImageComponent BlankPic
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ./BlankPic.png
      size = (16, 16)
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  Routine Reward
    ImageComponent RewardImage
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ./RewardPic.jpg
      size = (16, 16)
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    CodeComponent code_2
      Begin Routine:
        aperture1.enable = False
        aperture2.enable = False
        aperture3.enable = False
        aperture4.enable = False
  Routine Focal
    CodeComponent code
      Begin Routine:
        from psychopy import visual, core
        from PIL import Image
        import numpy as np
        import glob, os, random, copy, time

        randomTime = random.uniform(1,2)
        f1 = Image.open('./FocalPic.png', 'r')
        visual.ImageStim(win, f1).draw()
        win.flip()
        core.wait(randomTime)
  Routine RandomStimuli
    CodeComponent RandomPicControl
      Begin Routine:
        from psychopy import visual, core
        from PIL import Image
        import numpy as np
        import glob, os, random, copy, time

        #aperture1.enable = False
        #aperture2 = visual.Aperture(win, size=2, pos=(-4,4), ori=1, shape='circle')
        #aperture2.enable = False
        #aperture3 = visual.Aperture(win, size=2, pos=(4,4), ori=1, shape='circle')
        #aperture3.enable = False
        #aperture4 = visual.Aperture(win, size=2, pos=(-4,-4), ori=1, shape='circle')
        #aperture4.enable = False

        f1 = Image.open('./SolidRedPic.png', 'r')
        f2 = Image.open('./BlankPic.png', 'r')
        aperture1 = visual.Aperture(win, size=2, pos=(4,-4), ori=1, shape='circle')
        aperture1.enable = False
        visual.ImageStim(win, f2).draw()
        #win.flip()
        randomNumber = randint(0,4)

        aperture1.enable = True
        visual.ImageStim(win, f1).draw()

        win.flip()
        event.waitKeys()
        #if randomNumber==0:
        #    aperture1.enable = True
        #    visual.ImageStim(win, f1).draw()
        #    win.flip()
            #aperture1.enable = False
        #elif randomNumber==1:
        #    aperture2.enable = True
        #    visual.ImageStim(win, f1).draw()
        #    win.flip()
            #aperture2.enable = False
        #elif randomNumber==2:
        #    aperture3.enable = True
        #    visual.ImageStim(win, f1).draw()
        #    win.flip()
            #aperture3.enable = False
        #else:
        #    aperture4.enable = True
        #    visual.ImageStim(win, f1).draw()
        #    win.flip()
            #aperture4.enable = False
    CodeComponent code_3
      Begin Routine:
        from psychopy import visual, event

        # Need to allowStencil=True for a window with an Aperture:
        instr = visual.TextStim(win, text="Any key to quit", pos=(0, -.7))
        gabor1 = Image.open('./SolidRedPic.png', 'r')
        gabor2 = Image.open('./BlankPic.png', 'r')

        # `sizes in Aperture refers to the diameter when shape='circle';
        # vertices or other shapes are scaled accordingly
        aperture = visual.Aperture(win, size=0.9, pos=(2,-2), ori=1, shape='circle')  # try shape='square'
        aperture.enabled = False  # enabled by default when created
        visual.ImageStim(win, gabor2).draw()
        instr.draw()

        # drawing will now only be done within the aperture shape:
        aperture.enabled = True
        visual.ImageStim(win, gabor1).draw()

        win.flip()
        event.waitKeys()
        # The contents of this file are in the public domain.
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine BlankWait
    Routine Focal
    Routine RandomStimuli
    Routine Reward
  LoopTerminator trials
